---
API: 2.1
OpenSesame: 3.2.7b1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start visual_detection
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend xpyriment
set background black

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad intro
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Target detection task<br /><br />Touchscreen to begin" x=0 y=0 z_index=0

define sequence visual_detection
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run intro always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.2 <i>Kafkaesque Koffka</i>" x=0 y=0 z_index=0

